PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1920, 1080]
  expName = Eyetracking_MW_reading6_08_noP_WORKING
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilCaptureRecordingLocation = C:\Users\BAR Lab\Desktop\Leilani MW Eyetracking\EyeData
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = Monitor
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Routines
  Routine Launch
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #import what we need to generate a random number
        import random, xlrd
        import time

        #Use the machine time as a seed to generate a random number from (allows for closer to "truly random" numbers)
        random.seed(time.process_time())
        #set variable myRand to a random number (either 1 or 2); myRandP (EITHER 3 OR 4)
        rand = random.randint(1,2) #random number for choosing experimental condition order
        randP = random.randint(3,4) #random number for choosing reading pages order

        #set new variable 'currCondition' depending on what random number we generated
        if rand == 1:
            #50% chance of being in the PC condition
            currCondition = "PC"
        elif rand == 2:
            #50% chance of being in the SC condition
            currCondition = "SC"

        #CREATE A VARIABLE CALLED currConditionP and set it depending on randP
        if randP == 3:
            #50% chance of being Tropo pages
            currConditionP = "Tropo"
        elif randP == 4:
            #50% chance of being Life pages
            currConditionP = "Life"

        #For testing purposes we can set our condition and pages here.
        #Just comment out the two lines below to run the experiment randomly.
        currCondition = "SC"
        #currConditionP = "Tropo"
  Routine AQ_10_Qs
    ImageComponent AQ_10
      image [set every repeat] = $chAQ10
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent AQ_key_resp
      allowedKeys = '1','2','3','4',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Demographics
  Routine PracticeTrials
    CodeComponent code_7
      Code Type = Py
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      Begin Experiment:
        ##ONE TIME INITIALIZATION START
        #setting a bunch of defaults here (we will reset these in every practice or reading loop)
        opacityImage1 = 0 #PC image opacity (by default our probe and intentionality images are hidden)
        opacityImage2 = 0 #SC image opacity
        time1=0 #variables for recording response time data
        time2=0
        resp1=0 #variables for recording key press data
        resp2=0
        printNow = 0 #used to trigger data writing to output file
        keys = "" #stores keypress values
        #these three variables are used to start our timers at the right spot and avoid some edge cases
        firstLoop = True
        firstRoutine = True
        timerStarted = False


        #start two clocks
        mainTimer = core.Clock() # this one just runs for the whole PracticeTrial loop
        probeTimer = core.Clock() # this one stops and restarts every time one of our probe/intentionality images pops up

        myCount = 1 #this counts up and tells which value from the probe list we should use

        # import some stuff just in case
        import random, copy
        from random import randint
        from decimal import *
        import csv
        from numpy import *
        from psychopy import core, event
        event.getKeys() #clear the keyboard buffer just in case they recently pressed a relevant key
        ##ONE TIME INITIALIZATION END

        # here's a list of the time in seconds between probes. The probe clock starts ticking when the last seen probe goes away
        # change this to adjust probes for PracticeTrials
        probe = [0, 15, 15, 15]
        # first item in probe, 0, never happens because myCount starts at 1. Ignore first element in the probe list.
      Begin Routine:
        #if PracticeTrials just started then start our timers at 0. We never do this again after the first loop.
        if firstRoutine:
            firstRoutine = False
            probeTimer.reset(0)
            mainTimer.reset(0)
            timerStarted = True
      Each Frame:
        keys = event.getKeys() #get latest key presses

        #timerStarted is used here to make sure that we don't end the routine before we get a chance to reset the timer at the start of PracticeTrials
        if (mainTimer.getTime() > 180) and timerStarted:
            continueRoutine = False #quit every routine once the main timer goes over 3 minutes

        if firstLoop: #check if it's the very first frame
            keys = []
            event.clearEvents() #ignore any keypresses that seem to have happened in or before the first frame of PracticeTrials

        #this is the self-caught condition
        if currCondition=='SC':

            if PracticeTrails_key_resp.keys == 'space': #check if the user presses the space key
                continueRoutine = False #go to the next page for reading

            if '1' in keys: #Check if the user presses the '1' key to report MW
                opacityImage2 = 1 #show the intentionality image
                TimeAbs = mainTimer.getTime() #get the time that the key was pressed
                TimeSinceLast = probeTimer.getTime() #get the time since the last probe popped up
                keys = []
                event.clearEvents() #clear the keys to wait for the next input

            if (opacityImage2 == 1) and ('u' in keys or 'i' in keys): #while we show the intentionality image, wait to see if the 'u' or 'i' key is pressed
                opacityImage2 = 0 #hide the intentionality image
                time2 = mainTimer.getTime() - TimeAbs #store the time it took the user to respond with the 'u' or 'i' key
                resp2 = keys[0] #store the name of the key that was pressed
                keys = []
                event.clearEvents()
                printNow = 1 #start printing our data

            if printNow == 1: #time to write out data to our data file
                thisExp.addData('probe_appeared', TimeAbs) #log the time that the SC probe appeared (user pressed '1' key)
                thisExp.addData('time_since_last_probe', TimeSinceLast) #log time since last probe. Should be time since start of experiment if this is the first probe
                thisExp.addData('response_delay', time2) #log delay from probe appearing to response key being pressed
                thisExp.addData('probe_key_response', resp2) #log the key response to the probe
                thisExp.addData('condition', currCondition) #save the current condition
                thisExp.nextEntry() #if we do not move to the next line in the data file, then any other probes that occur before the end of this routine will overwrite our previous probe data
                probeTimer.reset(0) #reset the probe timer until the next time they self-report
                time1=0 #reset our time and response variables
                time2=0
                resp1=0
                resp2=0
                printNow = 0

        #this is the probe-caught condition
        if currCondition=='PC':

            if PracticeTrails_key_resp.keys == 'space': #check if the user presses the space key
                continueRoutine = False #go to the next page for reading

            #we need to check that opacityImage1 is not 1 here. Otherwise this if statement is true every frame until we get a response, which ruins our data.
            if opacityImage1 != 1 and (len(probe) > myCount) and probeTimer.getTime() >= probe[myCount]: # if the right amt of time has passed, display probe
                opacityImage1=1 #show probe image
                TimeAbs = mainTimer.getTime() #get the time the probe appeared
                TimeSinceLast = probeTimer.getTime() #get the time since the last probe went away

            if opacityImage1 == 1 and ('0' in keys or 'i' in keys or 'u' in keys): #Wait for the user's response once the probe image is showing
                opacityImage1 = 0 #hide the probe image
                time1 = mainTimer.getTime() - TimeAbs #get the response time since the probe image appeared
                resp1 = keys[0] #store the key that was pressed
                keys = []
                event.clearEvents()
                printNow = 1 #start the conditional for writing out data to the data file

            if printNow == 1:
                printNow = 0 #stop printing after we do it once
                thisExp.addData('probe_appeared', TimeAbs) #log the time that the PC probe appeared
                thisExp.addData('time_since_last_probe', TimeSinceLast) #log time since last probe. Should be time since start of experiment if this is the first probe
                thisExp.addData('response_delay', time1) #log delay from probe appearing to response key being pressed
                thisExp.addData('probe_key_response', resp1) #log the key response to the probe
                thisExp.addData('condition', currCondition) #save the current condition
                thisExp.nextEntry() #if we do not move to the next line in the data file, then any other probes that occur before the end of this routine will overwrite our previous probe data
                probeTimer.reset(0)
                time1=0 #reset our time and response variables
                time2=0
                resp1=0
                resp2=0
                myCount = myCount + 1

        firstLoop = False #end of the first frame loop so this is no longer true
    ImageComponent EinsteinIm
      image [set every repeat] = $chEin
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent PCImage
      image = images\PC_v2.png
      opacity [set every frame] = $opacityImage1
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent SCImage
      image = images\SC_v2.png
      opacity [set every frame] = $opacityImage2
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent PracticeTrails_key_resp
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine MW_def
    ImageComponent MWdefInstr
      image [set every repeat] = $chInstrSlide
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent MWdefInstr_key_resp
      allowedKeys = 'space',
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Debrief
  Routine LaunchPages
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        #create a variable called probeMessage. We will use this variable to tell psychopy what text to display
        if currCondition == "PC":
            #if we're in the PC condition then show the PC instructions
            probeMessage = "Remember, when the probe appears on screen: \n Press '1' if you were mind wandering (MW) immediately before the probe appeared, or '0' if you were not MW. \n When prompted, press 'i' if your MW was intentional (on purpose), or 'u' if it was unintentional (just happened on its own). \n When prompted again, press 'y' for yes, your MW was task-related, or 'n' for no, it was not task-related."
            stimFile = "lifePages_PC.csv"
        elif currCondition == "SC":
            #if we're in the SC condition then show the SC instructions
            probeMessage = "Remember: Press '1' any time you catch yourself mind wandering (MW). \n When prompted, press 'i' if your MW was intentional (on purpose), or 'u' if it was unintentional (just happened on its own). \n When prompted again, press 'y' for yes, your MW was task-related, or 'n' for no, it was not task-related"
            stimFile = "lifePages_SC.csv"
  Routine DemographicQs
    ImageComponent DemoQs
      image [set every repeat] = $chDemoQs
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent DemographicQs_resp
      allowedKeys = '1','2','3','4','5','6','7',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Before we begin, please complete the following multiple choice questions by using the number keys to enter your answers.


        (Press the spacebar to continue)
    KeyboardComponent Welcome_text_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroPractice
    CodeComponent code_4
      Code Type = Py
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  Routine IntroExp
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $probeMessage
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    KeyboardComponent IntroExp_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AQintro
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please answer the following questions.



        (Press the spacebar to continue.)
    KeyboardComponent AQintro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Reading
    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        ##ONE TIME INITIALIZATION START
        #setting a bunch of defaults here (we will reset these in every practice or reading loop)
        opacityImage1 = 0 #PC image opacity (by default our probe and intentionality images are hidden)
        opacityImage2 = 0 #SC image opacity
        time1=0 #variables for recording response time data
        time2=0
        resp1=0 #variables for recording key press data
        resp2=0
        printNow = 0 #used to trigger data writing to output file
        keys = "" #stores keypress values
        #these three variables are used to start our timers at the right spot and avoid some edge cases
        firstLoop2 = True
        firstRoutine2 = True
        timerStarted2 = False


        #start two clocks
        mainTimer2 = core.Clock() # this one just runs for the whole PracticeTrial loop
        probeTimer2 = core.Clock() # this one stops and restarts every time one of our probe/intentionality images pops up

        myCount = 1 #this counts up and tells which value from the probe list we should use

        # import some stuff just in case
        import random, copy
        from random import randint
        from decimal import *
        import csv
        from numpy import *
        from psychopy import core, event
        event.getKeys() #clear the keyboard buffer just in case they recently pressed a relevant key
        ##ONE TIME INITIALIZATION END

        #Counter for iterating through our probe2 list
        myCount2 = 1

        event.clearEvents() #clear events just in case they recently pressed a relevant key

        # here's a list of the time in seconds between probes
        # change this to adjust the probes for the Reading loop
        probe2 = [0,91,112,74,98,113,62,92,79,76,62]
        # first item in probe, 0, never happens because myCount starts at 1
      Begin Routine:
        #Reset a bunch of our defaults at the start of this loop. We only do this once.
        #This stops the values from our previous practice loop from affecting this reading loop.
        if firstRoutine2:
            firstRoutine2 = False
            mainTimer2.reset(0)
            probeTimer2.reset(0)
            timerStarted2 = True
      Each Frame:
        keys = event.getKeys()

        if (mainTimer2.getTime() > 1080) and timerStarted2:
            continueRoutine = False #quit every routine once the main timer goes over 18 minutes

        if firstLoop2:
            keys = []
            event.clearEvents()

        if currCondition=='SC':
            if Reading_key_resp.keys == 'space':
                continueRoutine = False

            if '1' in keys:
                opacityImage2 = 1
                TimeAbs = mainTimer2.getTime()
                TimeSinceLast = probeTimer2.getTime()
                keys = []
                event.clearEvents()

            if (opacityImage2 == 1) and ('u' in keys or 'i' in keys):
                opacityImage2 = 0
                time2 = mainTimer2.getTime() - TimeAbs
                resp2 = keys[0]
                keys = []
                event.clearEvents()
                printNow = 1

            if printNow == 1:
                thisExp.addData('probe_appeared', TimeAbs) #log the time that the SC probe appeared (user pressed '1' key)
                thisExp.addData('time_since_last_probe', TimeSinceLast) #log time since last probe. Should be time since start of experiment if this is the first probe
                thisExp.addData('response_delay', time2) #log delay from probe appearing to response key being pressed
                thisExp.addData('probe_key_response', resp2) #log the key response to the probe
                thisExp.addData('condition', currCondition) #save the current condition
                thisExp.nextEntry() #if we do not move to the next line in the data file, then any other probes that occur before the end of this routine will overwrite our previous probe data
                probeTimer2.reset(0)
                time1=0
                time2=0
                resp1=0
                resp2=0
                printNow = 0


        if currCondition=='PC':
            if Reading_key_resp.keys == 'space':
                continueRoutine = False

            if opacityImage1 != 1 and (len(probe2) > myCount2) and probeTimer2.getTime() >= probe2[myCount2]:
                opacityImage1=1
                TimeAbs = mainTimer2.getTime()
                TimeSinceLast = probeTimer2.getTime() #get the time since the last probe popped up

            if opacityImage1 == 1 and ('0' in keys or 'i' in keys or 'u' in keys):
                opacityImage1 = 0
                time1 = mainTimer2.getTime() - TimeAbs
                resp1 = keys[0]
                keys = []
                event.clearEvents()
                printNow = 1

            if printNow == 1:
                printNow = 0
                thisExp.addData('probe_appeared', TimeAbs) #log the time that the PC probe appeared
                thisExp.addData('time_since_last_probe', TimeSinceLast) #log time since last probe. Should be time since start of experiment if this is the first probe
                thisExp.addData('response_delay', time1) #log delay from probe appearing to response key being pressed
                thisExp.addData('probe_key_response', resp1) #log the key response to the probe
                thisExp.addData('condition', currCondition) #save the current condition
                thisExp.nextEntry() #if we do not move to the next line in the data file, then any other probes that occur before the end of this routine will overwrite our previous probe data
                probeTimer2.reset(0)
                time1=0
                time2=0
                resp1=0
                resp2=0
                myCount2 = myCount2 + 1

        firstLoop2 = False
    KeyboardComponent Reading_key_resp
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent imagePages
      image [set every repeat] = $ChPage
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent PCProbe
      image = images/PC_v2.png
      opacity [set every frame] = opacityImage1
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent SCProbe
      image = images/SC_v2.png
      opacity [set every frame] = opacityImage2
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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  Routine Quiz
    ImageComponent QuizQuestion
      image [set every repeat] = $chQs
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent Quiz_key_resp
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AgeQuestion
    TextboxComponent AgeQuestion_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Using the number keys please enter your age. Then press 'space' to continue.
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    KeyboardComponent Age_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine blank
    TextComponent textInterval
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine setInstrFile2
    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        #TELLING PSYCHOPY WHICH INSTRUCTION SLIDES TO DISPLAY:
        #We've done the first runthrough so now we're switching conditions
        if currCondition == "PC":
            currCondition = "SC"
        elif currCondition == "SC":
            currCondition = "PC"

        if currCondition == "PC":
            #if we're in the PC condition then show the PC instructions
            InstrFile = "InstrFile/Instr_PC.csv"
        elif currCondition == "SC":
            #if we're in the SC condition then show the SC instructions
            InstrFile = "InstrFile/Instr_SC.csv"

        #CONFIRM INSTRUCTION SLIDES WILL BE SHOWN IN ORDER ON CSV FILE
  Routine MW_def2
    ImageComponent MWdef_image
      image [set every repeat] = $chInstrSlide
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent MW_def2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MWdefinitions2
  Routine IntroPractice2
    CodeComponent code_9
      Code Type = Py
      Begin Experiment:
        #create a variable called probeMessage. We will use this variable to tell psychopy what text to display
        if currCondition == "PC":
            #if we're in the PC condition then show the PC instructions
            probeMessage = "Remember, when the probe appears on screen: \n Press '1' if you were mind wandering (MW) immediately before the probe appeared, or '0' if you were not MW. \n When prompted, press 'i' if your MW was intentional (on purpose), or 'u' if it was unintentional (just happened on its own). \n When prompted again, press 'y' for yes, your MW was task-related, or 'n' for no, it was not task-related."
        elif currCondition == "SC":
            #if we're in the SC condition then show the SC instructions
            probeMessage = "Remember: Press '1' any time you catch yourself mind wandering (MW). \n When prompted, press 'i' if your MW was intentional (on purpose), or 'u' if it was unintentional (just happened on its own). \n When prompted again, press 'y' for yes, your MW was task-related, or 'n' for no, it was not task-related"

        #SWITCH CONDITION PAGES BECAUSE WE'RE ON TO THE SECOND SET OF TRIALS
        if currConditionP == "Life":
            currConditionP = "Tropo"
        elif currConditionP == "Tropo":
            currConditionP = "Life"

        if currConditionP == "Life":
            #if we're in the Life condition then show LifePages
            stimFile = "LifePages.csv"
            quizFile = "lifeQs.csv"
        elif currConditionP == "Tropo":
            #if we're in the Tropo condition then show TropoPages
            stimFile = "TropoPages.csv"
            quizFile = "tropoQs.csv"

        #remember, once we've set the probeMessage variable we need to tell psychopy to show it as text
        #double click on the 'text' object and set the 'text' field to '$probeMessage'
        #this tells psychopy to display whatever the value of the probeMessage variable is
  Routine PracticeTrials2
    CodeComponent code_10
      Code Type = Py
      Begin Experiment:
        firstLoop3 = True
        firstRoutine3 = True
        timerStarted3 = False

        mainTimer3 = core.Clock()
        probeTimer3 = core.Clock()

        myCount3 = 1

        event.getKeys()
        probe3 = [0, 15, 15, 15]
        # first item in probe, 0, never happens because myCount starts at 1
      Begin Routine:
        if firstRoutine3:
            opacityImage1 = 0
            opacityImage2 = 0
            time1=0
            time2=0
            resp1=0
            resp2=0
            printNow = 0
            keys = ""
            firstRoutine3 = False
            mainTimer3.reset(0)
            probeTimer3.reset(0)
            timerStarted3 = True
      Each Frame:
        keys = event.getKeys()

        if (mainTimer3.getTime() > 180) and timerStarted3:
            continueRoutine = False

        if firstLoop3:
            keys = []
            event.clearEvents()

        #this is the self-caught condition, but because this is the second run we enter it when condition is set to 'PC'
        if currCondition=='SC':

            if PracticeTrials2_key_resp.keys == 'space':
                continueRoutine = False

            if '1' in keys:
                opacityImage2 = 1
                TimeAbs = mainTimer3.getTime()
                TimeSinceLast = probeTimer3.getTime()
                keys = []
                event.clearEvents()

            if (opacityImage2 == 1) and ('u' in keys or 'i' in keys):
                opacityImage2 = 0
                time2 = mainTimer3.getTime() - TimeAbs
                resp2 = keys[0]
                keys = []
                event.clearEvents()
                printNow = 1

            if printNow == 1:
                thisExp.addData('probe_appeared', TimeAbs) #log the time that the SC probe appeared (user pressed '1' key)
                thisExp.addData('time_since_last_probe', TimeSinceLast) #log time since last probe. Should be time since start of experiment if this is the first probe
                thisExp.addData('response_delay', time2) #log delay from probe appearing to response key being pressed
                thisExp.addData('probe_key_response', resp2) #log the key response to the probe
                thisExp.addData('condition', currCondition) #save the current condition
                thisExp.nextEntry() #if we do not move to the next line in the data file, then any other probes that occur before the end of this routine will overwrite our previous probe data
                probeTimer3.reset(0) #reset the probe timer until the next time they self-report
                time1=0 #reset our time and response variables
                time2=0
                resp1=0
                resp2=0
                printNow = 0

        #this is the probe-caught condition but because this is the second run we enter here when condition is set to SC
        if currCondition=='PC':

            if PracticeTrials2_key_resp.keys == 'space':
                continueRoutine = False

            if opacityImage1 != 1 and (len(probe3) > myCount3) and probeTimer3.getTime() >= probe[myCount3]:
                opacityImage1=1
                TimeAbs = mainTimer3.getTime()
                TimeSinceLast = probeTimer3.getTime() #get the time since the last probe went away

            if opacityImage1 == 1 and ('0' in keys or 'i' in keys or 'u' in keys):
                opacityImage1 = 0
                time1 = mainTimer3.getTime() - TimeAbs
                resp1 = keys[0]
                keys = []
                event.clearEvents()
                printNow = 1

            if printNow == 1:
                printNow = 0
                thisExp.addData('probe_appeared', TimeAbs) #log the time that the PC probe appeared
                thisExp.addData('time_since_last_probe', TimeSinceLast) #log time since last probe. Should be time since start of experiment if this is the first probe
                thisExp.addData('response_delay', time1) #log delay from probe appearing to response key being pressed
                thisExp.addData('probe_key_response', resp1) #log the key response to the probe
                thisExp.addData('condition', currCondition) #save the current condition
                thisExp.nextEntry() #if we do not move to the next line in the data file, then any other probes that occur before the end of this routine will overwrite our previous probe data
                probeTimer3.reset(0)
                time1=0
                time2=0
                resp1=0
                resp2=0
                myCount3 = myCount3 + 1

        firstLoop3 = False
    ImageComponent EinsteinImage
      image [set every repeat] = $chEin
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent PCImage2
      image = images\PC_v2.png
      opacity [set every frame] = opacityImage1
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent SCImage2
      image = images\SC_v2.png
      opacity [set every frame] = opacityImage2
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent PracticeTrials2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine IntroExp2
    TextComponent probe_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $probeMessage2
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    KeyboardComponent IntroExp2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Reading2
    KeyboardComponent Reading2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent imagePages2
      image [set every repeat] = $ChPage
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent PCProbe2
      image = images/PC_v2.png
      opacity [set every frame] = opacityImage1
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent SCProbe2
      image = images/SC_v2.png
      opacity [set every frame] = opacityImage2
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        #use new true/false variables so that the values from our Practice loop don't affect the functionality of the Reading loop
        firstLoop4 = True
        firstRoutine4 = True
        timerStarted4 = False

        #start two new clocks so the values of the previous clocks don't affect this loop
        mainTimer4 = core.Clock()
        probeTimer4 = core.Clock()

        #create a new counter so the value of our old counter doesn't carry over to this loop
        myCount4 = 1

        event.clearEvents()

        # here's a list of the time in seconds between probes
        # change this to adjust the probes for the Quiz2 loop
        probe4 = [0,91,112,74,98,113,62,92,79,76,62]
        # first item in probe, 0, never happens because myCount starts at 1
      Begin Routine:
        if firstRoutine4:
            opacityImage1 = 0
            opacityImage2 = 0
            time1=0
            time2=0
            resp1=0
            resp2=0
            printNow = 0
            keys = ""
            firstRoutine4 = False
            mainTimer4.reset(0)
            probeTimer4.reset(0)
            timerStarted4 = True
      Each Frame:
        keys = event.getKeys()

        if (mainTimer4.getTime() > 1080) and timerStarted4:
            continueRoutine = False

        if firstLoop4:
            keys = []
            event.clearEvents()

        #this is the self-caught condition but we check if we're in PC because this is run 2
        if currCondition=='SC':

            if Reading2_key_resp.keys == 'space':
                continueRoutine = False

            if '1' in keys:
                opacityImage2 = 1
                TimeAbs = mainTimer4.getTime()
                TimeSinceLast = probeTimer4.getTime()
                keys = []
                event.clearEvents()

            if (opacityImage2 == 1) and ('u' in keys or 'i' in keys):
                opacityImage2 = 0
                time2 = mainTimer4.getTime() - TimeAbs
                resp2 = keys[0]
                keys = []
                event.clearEvents()
                printNow = 1

            if printNow == 1:
                thisExp.addData('probe_appeared', TimeAbs) #log the time that the SC probe appeared (user pressed '1' key)
                thisExp.addData('time_since_last_probe', TimeSinceLast) #log time since last probe. Should be time since start of experiment if this is the first probe
                thisExp.addData('response_delay', time2) #log delay from probe appearing to response key being pressed
                thisExp.addData('probe_key_response', resp2) #log the key response to the probe
                thisExp.addData('condition', currCondition) #save the current condition
                thisExp.nextEntry() #if we do not move to the next line in the data file, then any other probes that occur before the end of this routine will overwrite our previous probe data
                probeTimer4.reset(0)
                time1=0
                time2=0
                resp1=0
                resp2=0
                printNow = 0

        #this is the probe-caught condition but we check if we're in SC because this is the second run
        if currCondition=='PC':

            if Reading2_key_resp.keys == 'space':
                continueRoutine = False

            if opacityImage1 != 1 and (len(probe4) > myCount4) and probeTimer4.getTime() >= probe4[myCount4]:
                opacityImage1=1
                TimeAbs = mainTimer4.getTime()
                TimeSinceLast = probeTimer4.getTime() #get the time since the last probe went away

            if opacityImage1 == 1 and ('0' in keys or 'i' in keys or 'u' in keys):
                opacityImage1 = 0
                time1 = mainTimer4.getTime() - TimeAbs
                resp1 = keys[0]
                keys = []
                event.clearEvents()
                printNow = 1

            if printNow == 1:
                thisExp.addData('probe_appeared', TimeAbs) #log the time that the PC probe appeared
                thisExp.addData('time_since_last_probe', TimeSinceLast) #log time since last probe. Should be time since start of experiment if this is the first probe
                thisExp.addData('response_delay', time1) #log delay from probe appearing to response key being pressed
                thisExp.addData('probe_key_response', resp1) #log the key response to the probe
                thisExp.addData('condition', currCondition) #save the current condition
                thisExp.nextEntry() #if we do not move to the next line in the data file, then any other probes that occur before the end of this routine will overwrite our previous probe data
                probeTimer4.reset(0)
                time1=0
                time2=0
                resp1=0
                resp2=0
                myCount4 = myCount4 + 1
                printNow = 0

        firstLoop4 = False
  Routine Quiz2
    ImageComponent QuizQuestion2
      image [set every repeat] = $chQs
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent Quiz2_key_resp
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setFiles
    CodeComponent code_8
      Code Type = Py
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      Begin Experiment:
        #SETTING ALL OUR FILE VARIABLES FOR THE EXPERIMENT BASED ON currCondition AND currConditionPs
        if currCondition == "PC":
            #if we're in the PC condition then show the PC instructions first run and the SC instructions second run
            InstrFile = "InstrFile/Instr_PC.csv"
            InstrFile2 = "InstrFile/Instr_SC_v2.csv"
            #if we're in the PC condition then show the PC probe message first run and the SC probe message second run
            probeMessage = "Remember, when the probe appears on screen: \n Press 'i' if your MW was intentional (on purpose), or 'u' if it was unintentional (just happened on its own). \n Press '0' if you were not experiencing MW when the probe appeared."
            probeMessage2 = "Remember: Press '1' any time you catch yourself mind wandering (MW). \n When prompted, press 'i' if your MW was intentional (on purpose), or 'u' if it was unintentional (just happened on its own)."
        elif currCondition == "SC":
            #if we're in the SC condition then show the SC instructions first run and the PC instructions second run
            InstrFile = "InstrFile/Instr_SC.csv"
            InstrFile2 = "InstrFile/Instr_PC_v2.csv"
            #if we're in the SC condition then show the SC probe message first run and the PC probe message second run
            probeMessage = "Remember: Press '1' any time you catch yourself mind wandering (MW). \n When prompted, press 'i' if your MW was intentional (on purpose), or 'u' if it was unintentional (just happened on its own)."
            probeMessage2 = "Remember, when the probe appears on screen: \n Press 'i' if your MW was intentional (on purpose), or 'u' if it was unintentional (just happened on its own). \n Press '0' if you were not experiencing MW when the probe appeared."

        if currConditionP == "Life":
            #if we're in the Life condition then show LifePages first run and TropoPages second run
            stimFile = "LifePages.csv"
            stimFile2 = "TropoPages.csv"
            #if we're in the Life condition then show Life quiz questions first run and Tropo quiz questions second run
            quizFile = "lifeQs.csv"
            quizFile2 = "tropoQs.csv"

        elif currConditionP == "Tropo":
            #if we're in the Tropo condition then show TropoPages first run and LifePages second run
            stimFile = "TropoPages.csv"
            stimFile2 = "LifePages.csv"
            #if we're in the Tropo condition then show Tropo quiz questions first run and Life quiz questions second run
            quizFile = "tropoQs.csv"
            quizFile2 = "lifeQs.csv"

        #All the above variables will be used in later components as such:
        #InstrFile used in MWdefinitions loop as the csv file to pull instruction images from
        #InstrFile2 used in MWdefinitions2 loop as the csv file to pull instruction images from
        #probeMessage used in IntroExp as display text
        #probeMessage2 used in IntroExp2 as display text
        #stimFile used in ReadingLoop as the csv file to pull reading page images from
        #stimFile2 used in ReadingLoop2 as the csv file to pull reading page images from
        #quizFile used in QuizLoop as the csv file to pull quiz question images from
        #quizFile2 used in QuizLoop2 as the csv file to pull quiz question images from
  Routine InterestingQ
    ImageComponent interestingImage
      image = QuizQs\Likert_interest.PNG
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent InterestingQ_key_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine EndText
    TextComponent EndExpText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating in this experiment!

        Please let the research assistant know if you would like to be debriefed.

        Thank you!

        (Press 'space' to continue)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DifficultyQ
    ImageComponent difficultyImage
      image = QuizQs\Likert_difficulty.PNG
      saveStartStop = False
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent DifficultyQ_key_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Halfway
    TextComponent HalfwayText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the first half of the experiment.

        Before beginning the second half, please let the research assistant know if you have any questions or if you need a short break.

        (Press the spacebar to continue)
    KeyboardComponent HalfwayResp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent halfway_code
      Code Type = Auto->JS
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      Begin Routine:
        if currCondition == 'SC':
            currCondition = 'PC'
        else:
            currCondition = 'SC'

        if currConditionP == 'Life':
            currConditionP ='Tropo'
        else:
            currConditionP ='Life'
  Routine EndPractice
    TextComponent EndPracticeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The practice session is now over.

        If you have no questions for the research assistant, please press the
        spacebar to continue to the experiment.
    KeyboardComponent EndPracticRresp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine blank500
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine adhdQ1_2
    TextComponent adhdQ
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Q_stim
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    TextComponent Qanswer
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        1. Yes
        2. No
    KeyboardComponent key_QA
      allowedKeys [set every repeat] = '1', '2',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AlwaysQ
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if(key_QA.keys == '1'):
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent AlwaysQText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Have you always been like this? (as long as you can remember, or for most of your life)
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    TextComponent AlwaysAnswer
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. Yes
        2. No
    KeyboardComponent key_AlwaysResp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine adhdDx
    TextComponent adhdDxQ
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Have you ever been given an official diagnosis of attention-deficit / hyperactivity disorder (ADHD) (e.g., by a registered psychologist, psychiatrist, counsellor, etc.)?
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    TextComponent Dx_answer
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. Yes
        2. No
        3. No, but I strongly suspect I might have ADHD
    KeyboardComponent key_Dx
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PageSkipping
    TextComponent NoSkipping
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please read at your normal pace and do not skip pages.


        (press spacebar to continue)
    KeyboardComponent key_Skip
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine intMWcaptureQ
    ImageComponent MWcaptureImage
      image = QuizQs\Likert_intMW.png
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent intMWcaptureQ_key_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Likert_Mot
    ImageComponent MW_mot
      image = QuizQs\Likert_motivation.png
      saveStartStop = False
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent MW_motQ_key_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine unIntMWcapture
    ImageComponent MWunint
      image = QuizQs\Likert_unintMW.png
      saveStartStop = False
      size = (1.0, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent unintMWkey_resp_2
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine EYE_RECORD_START
    EyetrackerRecordComponent etRecord_START
      actionType = Start Only
      startVal [time (s)] = 1
      syncScreenRefresh = False
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  Routine EYE_RECORD_STOP
    EyetrackerRecordComponent EYE_Record_STOP
      actionType = Stop Only
      stopVal [duration (s)] = 2
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = hsv
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = False
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 5
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    fillColor = 1.0000, 1.0000, 1.0000
    innerBorderColor = black
    innerBorderWidth = 5
    innerFillColor = green
    innerRadius = 0.01
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.05
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine Calibration_Instructions
    TextComponent Cal_Instruct1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        EYETRACKER SETUP

        The researcher will now fit you with the eyetracker. This will require them to make some hands on adjustments of the camera. If you are uncomfortable with this, please let them know and they will stop.
Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine Launch
  Routine Welcome
  LoopInitiator Demographic_Loop loopType="TrialHandler"
    conditionsFile = chooseDemoQs.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('chDemoQs', 'Demographics/Demographics_1.png')]),
      OrderedDict([('chDemoQs', 'Demographics/Demographics_2.png')]),
      OrderedDict([('chDemoQs', 'Demographics/Demographics_3.png')]),
      OrderedDict([('chDemoQs', 'Demographics/Demographics_4.png')]),
      OrderedDict([('chDemoQs', 'Demographics/Demographics_5.png')])]
    Routine DemographicQs
  LoopTerminator Demographic_Loop
  Routine blank
  Routine AgeQuestion
  Routine AQintro
  LoopInitiator AQ_Loop loopType="TrialHandler"
    conditionsFile = chooseAQ10.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('chAQ10', 'AQ_10_Qs/AQ1.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ2.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ3.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ4.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ5.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ6.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ7.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ8.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ9.png')]),
      OrderedDict([('chAQ10', 'AQ_10_Qs/AQ10.png')])]
    Routine AQ_10_Qs
    Routine blank500
  LoopTerminator AQ_Loop
  LoopInitiator Q_trials loopType="TrialHandler"
    conditionsFile = adhd3Qs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Q_stim': 'Do you often feel restless? (e.g., being nervous, having difficulty sitting still, fidgeting, doing a lot of exercise, or being active)'},
      {'Q_stim': 'Do you often act first and then think? (e.g., blurting things out, spending too much money, or being impatient)'},
      {'Q_stim': 'Do you often have concentration problems? (e.g., being easily distracted, not finishing things, being easily bored, forgetful, or chaotic)'}]
    Routine adhdQ1_2
    Routine blank500
    Routine AlwaysQ
    Routine blank500
  LoopTerminator Q_trials
  Routine adhdDx
  Routine setFiles
  Routine blank
  LoopInitiator MWdefinitions loopType="TrialHandler"
    conditionsFile = $InstrFile
    loopType = sequential
    nReps = 1
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    Routine MW_def
  LoopTerminator MWdefinitions
  Routine IntroExp
  Routine PageSkipping
  Routine EYE_RECORD_START
  EyetrackerCalibrationRoutine calibration
  LoopInitiator ReadingLoop loopType="TrialHandler"
    conditionsFile = $stimFile
    loopType = sequential
    nReps = 1
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    Routine Reading
  LoopTerminator ReadingLoop
  EyetrackerValidationRoutine validation
  Routine EYE_RECORD_STOP
  Routine blank
  LoopInitiator QuizLoop loopType="TrialHandler"
    conditionsFile = $quizFile
    loopType = sequential
    nReps = 1
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    Routine Quiz
  LoopTerminator QuizLoop
  Routine blank
  Routine InterestingQ
  Routine DifficultyQ
  Routine Likert_Mot
  Routine unIntMWcapture
  Routine intMWcaptureQ
  Routine blank
  Routine Halfway
  LoopInitiator MWDefinitions2 loopType="TrialHandler"
    conditionsFile = $InstrFile2
    loopType = sequential
    nReps = 1
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    Routine MW_def2
  LoopTerminator MWDefinitions2
  Routine IntroExp2
  Routine EYE_RECORD_START
  EyetrackerCalibrationRoutine calibration
  LoopInitiator ReadingLoop2 loopType="TrialHandler"
    conditionsFile = $stimFile2
    loopType = sequential
    nReps = 1
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    Routine Reading2
  LoopTerminator ReadingLoop2
  EyetrackerValidationRoutine validation
  Routine EYE_RECORD_STOP
  Routine blank
  LoopInitiator QuizLoop2 loopType="TrialHandler"
    conditionsFile = $quizFile2
    loopType = sequential
    nReps = 1
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    Routine Quiz2
  LoopTerminator QuizLoop2
  Routine blank
  Routine InterestingQ
  Routine DifficultyQ
  Routine Likert_Mot
  Routine unIntMWcapture
  Routine intMWcaptureQ
  Routine blank
  Routine EndText
